20190523_104805 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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5,0;DiTi 1000ul;MP s-1 grid 5-10!MP 3Pos
5,1;96 Well Microplate;MP96 Orig
11,0;EppendorfCupsSamplerack;Episx16 on Tube Eppendorf 16 Pos
12,0;Sampletubes Eppendorfrack;Samples1
13,0;Sampletubes Eppendorfrack;Samples2
14,0;Sampletubes Eppendorfrack;Samples3
15,0;Sampletubes Eppendorfrack;Samples4
16,0;Sampletubes Eppendorfrack;Samples5
17,0;Sampletubes Eppendorfrack;Samples6on Tube Eppendorf 16 Pos
19,0;Washstation 2Grid Cleaner short;Cleaner1
19,1;Washstation 2Grid Waste;Waste
19,2;Washstation 2Grid Cleaner long;Cleaner2
19,4;Trough 100ml;IC2-RNA
19,6;Washstation 2Grid DiTi Waste;DiTi Waste
22,0;Tube Falcon 15ml 12 Pos;DNase
23,0;96 Well Separation Plate;AGOWA-MagGrid23-30
33,0;96 Well Macherey-Nagel Plate;FilterplatteVacGrid33-38
43,0;DiTi 1000ul;DiTi1000/2
43,1;FilterplateaufElutionplate flach;Labw fake
43,2;96 Well 8er Macherey-Nagel flach;SQW
53,0;Trough 100ml;RA4
53,1;Trough 100ml;MDB
53,2;Trough 100ml;Wasser
54,0;Trough 100ml;RA3/2
54,1;Trough 100ml;RA3/1
54,2;Trough 100ml;RA2
55,0;FilterplateaufElutionplate flach;Filterplatte auf Elutionsplatte
55,2;96 Well Microplate;MP96 fake cretaed by evow
64,0;96 Well DeepWell;MP Grid64-69 on Te-Shake 1Pos
1;System
1;Te-Shake 2Pos
2;Shelf 8+6Pos;DiTi 1000ul
66;Hotel 5Pos DeepWell;96 Well Microplate
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--{ RPG }--
Transfer_Rack("66","43",1,0,1,0,0,"","96 Well Microplate","Narrow","","","Hotel 5Pos DeepWell","","MP 3Pos Cooled","3","(Not defined)","2");
UserPrompt("end?",0,-1);
Transfer_Rack("2","66",1,0,1,0,0,"","","Narrow","","","Shelf 8+6Pos","","Hotel 5Pos DeepWell","8","(Not defined)","4");
UserPrompt("end?",0,-1);
Comment("Prefill 1 plates with Buffer Reagent for 96 samples.");
Wash(255,19,1,19,0,"5",50,"10",50,0,50,100,1,0,1000,0);
Transfer_Rack("66","43",1,0,1,0,0,"","96 Well Microplate","Narrow","","","Hotel 5Pos DeepWell","","MP 3Pos Cooled","3","(Not defined)","3");
Transfer_Rack("5","55",1,0,1,0,0,"","96 Well Microplate","Narrow","","","MP 3Pos","","MP 3Pos","2","(Not defined)","3");
Group("Prefill plates with BufferReact");
UserPrompt("Put the plates for BufferReact",1,-1);
Group("Spread: 100.0 µL of Buffer ");
Comment("Spread: 100.0 µL of Buffer  (9984.0 µL total) from [grid:53 site:1 ['well 1 in RA4 :  with 9984.0 uL of Buffer '] into Filterplatte[grid:33 site:2] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35, 36, 37, 38, 39, 40, 41, 42, 43, 44, 45, 46, 47, 48, 49, 50, 51, 52, 53, 54, 55, 56, 57, 58, 59, 60, 61, 62, 63, 64, 65, 66, 67, 68, 69, 70, 71, 72, 73, 74, 75, 76, 77, 78, 79, 80, 81, 82, 83, 84, 85, 86, 87, 88, 89, 90, 91, 92, 93, 94, 95, 96]:");
GetDITI2(254,"DiTi 1000ul",0,0,0,300);
Aspirate(254,"Water for DITI 1000",0,"300.00","300.00","300.00","300.00","300.00","300.00","300.00",0,0,0,0,53,0,1,"0108®1",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,55,2,1,"0C08®1000000000000",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,55,2,1,"0C080¬300000000000",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,1,1,"0C0800¨70000000000",0,0);
Aspirate(254,"Water for DITI 1000",0,"300.00","300.00","300.00","300.00","300.00","300.00","300.00",0,0,0,0,53,0,1,"0108®1",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,1,1,"0C080000000000¨700",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,1,1,"0C0800000000000 ?0",0,0);
Dispense(254,"Water",0,"100.00","100.00","100.00","100.00","100.00","100.00","100.00",0,0,0,0,43,1,1,"0C08000000000000O",0,0);
GroupEnd();
DropDITI(255,19,6,0,300,0);
GroupEnd();
